PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = EIT_5.18.22
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Routines
  Routine prac_instr
    TextComponent p_instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = height
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      text:
        INSERT INSTRUCTIONS HERE

        PLEASE PRESS THE SPACE BAR TO CONTINUE
    KeyboardComponent p_instr_space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_end
    TextComponent p_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        THIS IS THE END OF THE PRACTICE.

        PRESS ANY KEY TO START THE EXPERIMENT.
    KeyboardComponent p_end_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_instr
    TextComponent e_instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        INSERT EXPERIMENTAL INSTRUCTIONS HERE.

        REMEMBER…

        CLICK ANY KEY TO CONTINUE.
    KeyboardComponent e_instr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_end
    TextComponent exp_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        PLEASE LET THE RESEARCH ASSISTANT KNOW YOU ARE FINISHED.

        PRESS ANY KEY TO CLOSE THIS EXPERIMENT.
    KeyboardComponent exp_end_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_trial
    PolygonComponent exp_fix
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent exp_iaps
      image [set every repeat] = $image_file
      size = (1, 1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    SoundComponent exp_sound
      sound [set every repeat] = $sound_file
      startVal [time (s)] = $sound_onset
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    KeyboardComponent exp_key
      allowedKeys = 'right','left'
      correctAns = $cor_key
      forceEndRoutine = False
      startVal [time (s)] = $key_onset
      stopVal [time (s)] = 8.0
      storeCorrect = True
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    ImageComponent exp_ITI
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
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  Routine prac_trial
    PolygonComponent prac_fix
      fillColor = white
      shape = cross
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    ImageComponent prac_iaps
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    SoundComponent prac_sound
      sound [set every repeat] = $sound_file
      startVal [time (s)] = $sound_onset
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    KeyboardComponent prac_key
      allowedKeys = 'left','right'
      correctAns = $cor_key
      forceEndRoutine = False
      startVal [time (s)] = $key_onset
      stopVal [time (s)] = 8.0
      storeCorrect = True
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    ImageComponent prac_ITI
      color = -1.0000, -1.0000, -1.0000
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine prac_instr
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = EIT_prac_conds.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_file': '2154.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '5740.bmp', 'sound_file': 'low.wav', 'sound_onset': 5, 'key_onset': 5, 'cor_key': 'left'},
      {'image_file': '7235.bmp', 'sound_file': 'low.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'left'}]
    Routine prac_trial
  LoopTerminator prac_trials
  Routine prac_end
  Routine exp_instr
  LoopInitiator exp_trials loopType="TrialHandler"
    conditionsFile = EIT_trial_conds.xlsx
    loopType = fullRandom
    nReps = 148
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    conditions:
      [{'image_file': '2026.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2190.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2200.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2210.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2215.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2221.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2270.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2381.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2383.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2440.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2480.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2495.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2840.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'},
      {'image_file': '2850.bmp', 'sound_file': 'hi.wav', 'sound_onset': 2, 'key_onset': 2, 'cor_key': 'right'}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
    Routine exp_trial
  LoopTerminator exp_trials
  Routine exp_end
